PsychoPy2experiment version="2021.2.3"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['participant'], expInfo['movie'], expName, expInfo['date'])
  Experiment info = {'participant': 'Damy001', 'movie': 'Gump0.mp4'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2021.2.3
  Window size (pixels) = [2560, 1080]
  expName = MovieWithEyetracking
  eyetracker = MouseGaze
  mgBlink = ('MIDDLE_BUTTON',)
  mgMove = CONTINUOUS
  mgSaccade = 0.5
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Routines
  Routine trial
    EyetrackerRecordComponent etRecord
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      syncScreenRefresh = False
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    RegionOfInterestComponent roi
      debug = False
      endRoutineOn = look at
      lookDur = 5
      nVertices = 4
      ori = 0
      pos [set every repeat] = (random()/2, random()/2)
      save = every look
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    PolygonComponent progress
      fillColor = white
      pos = (-0.5, -0.4)
      shape = custom polygon...
      size [set every frame] = (roi.currentLookTime/5, 0.1)
      startVal [time (s)] = 0.0
      vertices = [[0, 0.5],[0, -0.5],[1, -0.5],[1, 0.5]]
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    PolygonComponent target
      fillColor = black
      lineColor = None
      lineWidth = 10
      opacity = 0.2
      pos [set every repeat] = roi.pos
      shape = circle
      size [set every repeat] = roi.size
      startVal [time (s)] = 0.0
      vertices = roi.vertices
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    PolygonComponent gazeCursor
      fillColor [set every frame] = $("lightgreen" if roi.isLookedIn else "white")
      lineColor = None
      pos [set every frame] = etRecord.getPos()
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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  Routine instr
    TextboxComponent instructions
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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      text:
        This experiment shows off the eyetracking capabilities of Builder.

        In each trial, to move on, look at the dark circle for 5 seconds. The bar at the bottom will show how long you've been looking at it for, the cross will move with your eyes and will turn green when you're looking in the circle.

        Press SPACE to begin.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  EyetrackerValidationRoutine validation
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    cursorFillColor = green
    expandDur = 1
    expandScale = 1.25
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    saveAsImg = False
    showResults = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    targetPositions = NINE_POINTS
    units = from exp settings
  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.25
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    units = from exp settings
Flow
  EyetrackerCalibrationRoutine calibration
  EyetrackerValidationRoutine validation
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine trial
  LoopTerminator trials
